PsychoPy2experiment version="2021.1.4"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = pitchTest
  logging level = debug
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Routines
  Routine instr
    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press up arrow when you see up arrow image
        Press down arrow when you see down arrow image

        Press any key to continue
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksMessage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thanks for participating!
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  Routine visual_2
    PolygonComponent center_vis
      fillColor = white
      shape = rectangle
      size = (75, 75)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent arrow_image
      image [set every repeat] = $condition
      size = (75, 75)
      startVal [time (s)] = image_delay
      stopVal [duration (s)] = 0.5
      units = pix
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    KeyboardComponent resp_vis
      allowedKeys [set every repeat] = 'up', 'down'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent feedback_vis
      fillColor [set every repeat] = green
      lineColor [set every repeat] = green
      ori [set every repeat] = 0
      shape = rectangle
      size = (75, 75)
      startVal [condition] = resp_vis.status == STARTED
      stopVal [duration (s)] = 0.5
      units = pix
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        """
        feedback_vis = visual.Rect(
            win=win, name='feedback_vis',units='pix',
            width=(75, 75)[0], height=(75, 75)[1],
            ori=1.0, pos=(0, 0),
            lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
            opacity=None, depth=-3.0, interpolate=True)
        """
      Begin Routine:
        """
        feedback_vis.setFillColor('green')
        feedback_vis.setOri(0.0)
        feedback_vis.setLineColor('green')
        """
        #trial timing
        image_delay = randint(6, 15)
        print(image_delay)
      Each Frame:
        """
        # *feedback_vis* updates
        if feedback_vis.status == NOT_STARTED and resp_vis.status == STARTED:
            if  resp_vis.corr == 1 : # if correct ans given, then feedbackSquare is green
                feedback_vis.setFillColor('green')
                feedback_vis.setLineColor('green')
            elif resp_vis.corr == 0: # else if correct ans not given, then feedbackSquare is red
                feedback_vis.setFillColor('red')
                feedback_vis.setLineColor('red')
            # keep track of start time/frame for later
                feedback_vis.frameNStart = frameN  # exact frame index
                feedback_vis.tStart = t  # local t and not account for scr refresh
                feedback_vis.tStartRefresh = tThisFlipGlobal  # on global time
                win.timeOnFlip(feedback_vis, 'tStartRefresh')  # time at next scr refresh
                feedback_vis.setAutoDraw(True)
        if feedback_vis.status == STARTED:
                # is it time to stop? (based on global clock, using actual start)
                if tThisFlipGlobal > feedback_vis.tStartRefresh + 0.5-frameTolerance:
                    # keep track of stop time/frame for later
                    feedback_vis.tStop = t  # not accounting for scr refresh
                    feedback_vis.frameNStop = frameN  # exact frame index
                    win.timeOnFlip(feedback_vis, 'tStopRefresh')  # time at next scr refresh
                    feedback_vis.setAutoDraw(False)
        """
      End Routine:
        """
        visualLoop.addData('feedback_vis.started', feedback_vis.tStartRefresh)
        visualLoop.addData('feedback_vis.stopped', feedback_vis.tStopRefresh)
        """
  Routine audio
    SoundComponent sound_aud
      sound [set every repeat] = $pitch
      startVal [time (s)] = aud_delay
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
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    KeyboardComponent resp_aud
      allowedKeys [set every repeat] = 'up', 'down'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    PolygonComponent center_aud
      fillColor = white
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_aud
      fillColor = white
      shape = rectangle
      size = (75, 75)
      startVal [condition] = resp_aud.status == STARTED
      stopVal [duration (s)] = 0.5
      units = pix
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        aud_delay = randint(6, 15)
        print(aud_delay)
  Routine instr_vis
  Routine instr_audio
    TextComponent audio_instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press up arrow when you hear high pitch
        Press down arrow when you hear low pitch

        Press any key to continue
    KeyboardComponent key_resp_instructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator visualLoop loopType="TrialHandler"
    conditionsFile = visualStim.xlsx
    loopType = fullRandom
    nReps = 8
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    conditions:
      [{'condition': 'resources/down-arrow.png', 'correctAns': 'down'},
      {'condition': 'resources/up-arrow.png', 'correctAns': 'up'}]
    Routine visual_2
  LoopTerminator visualLoop
  Routine instr_audio
  LoopInitiator audioLoop loopType="TrialHandler"
    conditionsFile = ../../../../Users/claireliu/Desktop/EXCEL/pitches.xlsx
    loopType = fullRandom
    nReps = 8
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    conditions:
      [{'pitch': 'C', 'correctAns': 'down'},
      {'pitch': 'E', 'correctAns': 'up'}]
    Routine audio
  LoopTerminator audioLoop
  Routine thanks
